// ********** Image Types

(FixedInternalImagePixelType "float")
(FixedImageDimension 3)
(MovingInternalImagePixelType "float")
(MovingImageDimension 3)
(UseDirectionCosines "true")

// ********** Components

(Registration "MultiResolutionRegistration")
(FixedImagePyramid "FixedRecursiveImagePyramid")
(MovingImagePyramid "MovingRecursiveImagePyramid")
(Interpolator "BSplineInterpolator")
(ResampleInterpolator "FinalBSplineInterpolator")
(Metric "AdvancedMattesMutualInformation")
(Optimizer "AdaptiveStochasticGradientDescent")
(Resampler "DefaultResampler")
(Transform "EulerTransform")


// ********** Pyramid

// Total number of resolutions
(NumberOfResolutions 4)
(ImagePyramidSchedule 16 16 8 8 8 4 4 4 2 2 2 1)


// ********** Transform

//(Scaler 500000.0)
//(CenterOfRotation 128 128 90)
//(AutomaticTransformInitialization "true")
//(AutomaticTransformInitializationMethod "CenterOfGravity")
(HowToCombineTransforms "Compose")


// ********** Optimizer

// Maximum number of iterations in each resolution level:
(MaximumNumberOfIterations 2000)

//SP: Param_a in each resolution level. a_k = a/(A+k+1)^alpha
(SP_a 1000.0 1000.0 500.0 500.0)

//SP: Param_alpha in each resolution level. a_k = a/(A+k+1)^alpha
(SP_alpha 0.602)

//SP: Param_A in each resolution level. a_k = a/(A+k+1)^alpha
(SP_A 50.0)


// ********** Metric

//Number of grey level bins in each resolution level:
(NumberOfHistogramBins 32)
(FixedLimitRangeRatio 0.0)
(MovingLimitRangeRatio 0.0)
(FixedKernelBSplineOrder 1)
(MovingKernelBSplineOrder 3)


// ********** Several

(WriteTransformParametersEachIteration "false")
(WriteTransformParametersEachResolution "false")
(WriteResultImage "true")
(ResultImagePixelType "float")
(ResultImageFormat "nii.gz")
(ShowExactMetricValue "false")
(ErodeMask "false")


// ********** ImageSampler

//Number of spatial samples used to compute the mutual information in each resolution level:
(ImageSampler "RandomCoordinate")
(NumberOfSpatialSamples 10000)
(NewSamplesEveryIteration "true")


// ********** Interpolator and Resampler

//Order of B-Spline interpolation used in each resolution level:
(BSplineInterpolationOrder 1)

//Order of B-Spline interpolation used for applying the final deformation:
(FinalBSplineInterpolationOrder 3)

//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue 0)
